PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = CognControl
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Routines
  Routine WelcomeScreen
    TextComponent Welcome_text
      color = black
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Experiment!

        Um fortzufahren, drücken Sie die LEERTASTE
    KeyboardComponent Welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
    TextComponent Goodbyetext
      color = black
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Das war’s!

        Drücken Sie die LEERTASTE, um das Experiment zu beenden und sagen Sie der Experimentleiterin bescheid.
    KeyboardComponent key_goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine StroopTrials
    TextComponent stroop_word
      color [set every repeat] = $color
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent stroop_key
      allowedKeys = 'r','b','g'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine FixationCross
    TextComponent fix_cross
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
      text = +
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  Routine StroopInstructions
    TextComponent stroop_instructions
      color = black
      font = Courier New
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Sie werden nun Wörter oder Zeichen auf dem Bildschirm sehen. Diese werden jeweils in verschiedenen Farben (rot, blau, gelb) dargestellt.

        Ihre Aufgabe ist es, so SCHNELL wie möglich anzugeben, in welcher FARBE das Wort/Zeichen abgebildet wurde. Die Person, mit der schnellsten Zeit und den wenigsten Fehlern gewinnt.

        Dazu drücken Sie diese Tasten:
        r für ROT
        g für GELB
        b für BLAU

        Am besten legen Sie jetzt den linken Zeigefinger auf g, linken Mittelfinger auf r und rechten Zeigefinger auf b. So sind Sie schnell im Antworten.

        Drücken Sie jetzt die LEERTASTE, um einen Probedurchlauf zu starten.
    KeyboardComponent stroop_instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine SimonInstructions
  Routine StroopPractice
    TextComponent stroop_practice_word
      color [set every repeat] = $color
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent stroop_practice_key
      allowedKeys = 'b','r','g'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine StartWarning
    TextComponent start_warning_text
      color = black
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        Achtung, jetzt geht’s richtig los!
        Sie bekommen jetzt kein Feedback mehr.
  Routine SimonInstruction
    TextComponent Simon_instructions
      color = black
      font = Courier New
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Sie sehen gleich ein Viereck auf dem Bildschirm.
        Ihre Aufgabe ist es, je nach FARBE (blau oder rot) des Vierecks so schnell wie möglich eine Taste zu drücken.
        Auch hier ist das Ziel möglichst schnell und möglichst viele Richtige zu haben.

        Blaues Viereck = Taste „s“
        Rotes Viereck = Taste „k“

        Legen Sie jetzt am besten Ihren linken Zeigefinger auf s und rechten Zeigefinger auf k.

        Drücken Sie jetzt die LEERTASTE, um mit dem Probedurchlauf zu starten.
    KeyboardComponent simon_instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Done
    TextComponent done_text
      color = black
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Fertig!

        Weiter geht’s mit der nächsten Aufgabe.

        Drücken Sie die LEERTASTE, um zur Anleitung zu gelangen.
    KeyboardComponent done_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SimonTrials
    ImageComponent simon_square
      image [set every repeat] = $square
      pos [set every repeat] = (pos, 0)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent simon_key
      allowedKeys = 's','k'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine SimonPractice
    ImageComponent simon_practice_square
      image [set every repeat] = $square
      pos [set every repeat] = (pos, 0)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent simon_practice_key
      allowedKeys = 's','k'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine stroop_practice_feedback
    CodeComponent simonfeedback
      Code Type = Auto->JS
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      Begin Routine:
        if(stroop_practice_key.corr == 1):
            feedback_text = "✓"
        elif(stroop_practice_key.corr == 0):
            feedback_text = "X"
    TextComponent stroop_feedback_text
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine simon_practice_feedback
    CodeComponent simon_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if(simon_practice_key.corr == 1):
            feedback_text2 = "✓"
        elif(simon_practice_key.corr == 0):
            feedback_text2 = "X"
    TextComponent simon_feedback_text
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text2
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  Routine simon_practice_feedback_2
Flow
  Routine WelcomeScreen
  Routine StroopInstructions
  Routine Blank500
  LoopInitiator stroop_practice_trial loopType="TrialHandler"
    conditionsFile = stroop_practice_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_type': 'congruent', 'word': 'BLAU', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'congruent', 'word': 'ROT', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'congruent', 'word': 'GELB', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'incongruent', 'word': 'BLAU', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'incongruent', 'word': 'BLAU', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'incongruent', 'word': 'ROT', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'incongruent', 'word': 'ROT', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'incongruent', 'word': 'GELB', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'incongruent', 'word': 'GELB', 'color': 'blue', 'correct_key': 'b'}]
    Routine FixationCross
    Routine StroopPractice
    Routine stroop_practice_feedback
  LoopTerminator stroop_practice_trial
  Routine StartWarning
  LoopInitiator Stroop_trials loopType="TrialHandler"
    conditionsFile = StroopStim.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'stim_type': 'congruent', 'word': 'BLAU', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'congruent', 'word': 'ROT', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'congruent', 'word': 'GELB', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'congruent', 'word': 'BLAU', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'congruent', 'word': 'ROT', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'congruent', 'word': 'GELB', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'neutral', 'word': '%%%%', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'incongruent', 'word': 'BLAU', 'color': 'red', 'correct_key': 'r'},
      {'stim_type': 'incongruent', 'word': 'BLAU', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'incongruent', 'word': 'ROT', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'incongruent', 'word': 'ROT', 'color': 'yellow', 'correct_key': 'g'},
      {'stim_type': 'incongruent', 'word': 'GELB', 'color': 'blue', 'correct_key': 'b'},
      {'stim_type': 'incongruent', 'word': 'GELB', 'color': 'red', 'correct_key': 'r'}]
    Routine FixationCross
    Routine StroopTrials
  LoopTerminator Stroop_trials
  Routine Done
  Routine SimonInstruction
  Routine Blank500
  LoopInitiator Simon_practice_trials loopType="TrialHandler"
    conditionsFile = Simon_stim.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'type': 'congruent', 'square': 'SimonImages/bluesquare.png', 'pos': -0.5, 'correct_key': 's'},
      {'type': 'congruent', 'square': 'SimonImages/brownsquare.png', 'pos': 0.5, 'correct_key': 'k'},
      {'type': 'neutral', 'square': 'SimonImages/bluesquare.png', 'pos': 0, 'correct_key': 's'},
      {'type': 'neutral', 'square': 'SimonImages/brownsquare.png', 'pos': 0, 'correct_key': 'k'},
      {'type': 'incongruent', 'square': 'SimonImages/bluesquare.png', 'pos': 0.5, 'correct_key': 's'},
      {'type': 'incongruent', 'square': 'SimonImages/brownsquare.png', 'pos': -0.5, 'correct_key': 'k'}]
    Routine FixationCross
    Routine SimonPractice
    Routine simon_practice_feedback
  LoopTerminator Simon_practice_trials
  Routine StartWarning
  LoopInitiator Simon_trials loopType="TrialHandler"
    conditionsFile = Simon_stim.xlsx
    loopType = random
    nReps = 21
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    conditions:
      [{'type': 'congruent', 'square': 'SimonImages/bluesquare.png', 'pos': -0.5, 'correct_key': 's'},
      {'type': 'congruent', 'square': 'SimonImages/brownsquare.png', 'pos': 0.5, 'correct_key': 'k'},
      {'type': 'neutral', 'square': 'SimonImages/bluesquare.png', 'pos': 0, 'correct_key': 's'},
      {'type': 'neutral', 'square': 'SimonImages/brownsquare.png', 'pos': 0, 'correct_key': 'k'},
      {'type': 'incongruent', 'square': 'SimonImages/bluesquare.png', 'pos': 0.5, 'correct_key': 's'},
      {'type': 'incongruent', 'square': 'SimonImages/brownsquare.png', 'pos': -0.5, 'correct_key': 'k'}]
    Routine FixationCross
    Routine SimonTrials
  LoopTerminator Simon_trials
  Routine GoodbyeScreen
